CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load each channel (or stain) as a separate image.  If you have a color image composed of different stains, you’ll need to specify the image type as ‘Color image’ and then use a ColorToGray module in the Analysis modula panel to separate the incoming image into its component channels.', '', 'In the example pipeline, we call the two images OrigStain1 and OrigStain2.']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Vessels
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Vessels
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ApplyThreshold:[module_num:6|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
    Select the input image:OrigGreen
    Name the output image:ThreshLectin
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.5,1
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    Method to calculate adaptive window size:Image size
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    Use default parameters?:Default
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
ApplyThreshold:[module_num:7|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
    Select the input image:OrigRed
    Name the output image:ThreshCD31
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.5,1
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    Method to calculate adaptive window size:Image size
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    Use default parameters?:Default
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:ThreshLectin
    Name the primary objects to be identified:LectinObj
    Typical diameter of objects, in pixel units (Min,Max):10,1000
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Method to calculate adaptive window size:Image size
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
MaskObjects:[module_num:9|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
    Select objects to be masked:LectinObj
    Name the masked objects:OverlapCD31
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:ThreshCD31
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:10|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:OverlapCD31
    Retain a binary image of the object regions?:No
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
MeasureImageAreaOccupied:[module_num:11|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:ThreshCD31

ExportToSpreadsheet:[module_num:12|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notes:['This module is used to export the full set of measurements obtained by the pipeline. Measurements such as object counts, colocalization percentages and area fractions are saved to a per-image file (that is, one value per image); measurements such as colocalized/non-colocalized status and centroid distances are saved to a per-object file (one value per object).']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/Lectin
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :Image|AreaOccupied_AreaOccupied_OverlapCD31,Image|AreaOccupied_AreaOccupied_ThreshCD31
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:Yes
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