CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Vessels
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Vessels
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ApplyThreshold:[module_num:6|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
    Select the input image:OrigGreen
    Name the output image:ThreshGreen
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:Yes
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Method to calculate adaptive window size:Image size
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    Use default parameters?:Default
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:ThreshGreen
    Name the primary objects to be identified:IndividualVe
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Adaptive
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Method to calculate adaptive window size:Image size
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
ReassignObjectNumbers:[module_num:8|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
    Select the input objects:IndividualVe
    Name the new objects:RelabeledVe
    Operation:Unify
    Maximum distance within which to unify objects:20
    Unify using a grayscale image?:No
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    Retain outlines of the relabeled objects?:No
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    Unification method:Distance
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
MeasureImageAreaOccupied:[module_num:9|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:RelabeledVe
    Retain a binary image of the object regions?:Yes
    Name the output binary image:CD31VeBi
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:RelabeledVe
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|4T1
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :RelabeledVe|Number_Object_Number,RelabeledVe|AreaShape_Perimeter,RelabeledVe|AreaShape_Area,RelabeledVe|AreaShape_MajorAxisLength,RelabeledVe|AreaShape_MinorAxisLength
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:VesselDensity_WT_
    Overwrite existing files without warning?:Yes
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